%YAML 1.1
---
# yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
device: TimestampGeneratorGen3
whoAmI: 1158
firmwareVersion: "1.2"
hardwareTargets: "1.2"
registers:
  Config:
    address: 32
    type: U8
    access: Write
    maskType: ConfigurationFlags
    description: Specifies the device configuration
  DevicesConnected:
    address: 33
    type: U8
    access: Event
    maskType: ConnectedDevices
    description: Reads whether the port has a device connected to (bitmask)
  RepeaterStatus:
    address: 34
    type: U8
    access: Write
    maskType: RepeaterFlags
    description: Check whether device is a repeater or spreading internal timestamp
  BatteryRate:
    address: 35
    type: U8
    access: Write
    maskType: BatteryRateConfiguration
    description: Configure how often the battery calue is sent to computer
  Battery:
    address: 36
    type: Float
    access: Event
    description: Reads the current battery charge
  BatteryThresholdLow:
    address: 37
    type: Float
    access: Write
    description: Specifies the low threshold from where the battery should start to be charged
  BatteryThresholdHigh:
    address: 38
    type: Float
    access: Write
    description: Specifies the high threshold from where the battery stops being charged
  BatteryCalibration0:
    address: 39
    type: U16
    access: Write
  BatteryCalibration1:
    address: 40
    type: U16
    access: Write
  Timer:
    address: 41
    type: U32
    access: [Write, Event]
    description: Unitary counter that periodically produces a value at the frequency defined by register TimerFrequency.
  TimerFrequency:
    address: 42
    type: U8
    access: Write
    maskType: TimerRate
    description: Frequency at which the Timer will generate new values.
bitMasks:
  ConfigurationFlags:
    description: Specifies configuration flags for the device.
    bits:
      StartBatteryCycle: {0x1, description: Starts battery cycle to extend batteries life.}
      StartDischarge: {0x2, description: Starts to discharge right away.}
      StartCharge: {0x4, description: Starts to charge right away.}
      Stop: {0x8, description: Stop any control of the battery and resume normal function.}      
  ConnectedDevices:
    description: Specifies if an output port has a device connected.
    bits:
      Port0: 0x01
      Port1: 0x02
      Port2: 0x04
      Port3: 0x08
      Port4: 0x10
      Port5: 0x20
  RepeaterFlags:
    description: Specifies whether the device is a clock repeater.
    bits:
      Repeater: {0x1, description: The device is a repeater.}
groupMasks:
  BatteryRateConfiguration:
    description: Specifies the rate at which the battery charge is sent.
    values:
      EveryMinute: {0, description: The charge is sent every minute.}
      Every10Seconds: {1, description: The charge is sent every 10 seconds.}
      EverySecond: {2, description: The charge is sent every second.}
      Never: {3, description: The battery charge is not sent.}
  TimerRate:
    description: Specifies the rate at which the timer counter is sent.
    values:
      TimerOff: {0, description: Timer is tunerd off.}
      Timer50Hz: {1, description: Counter sent at 50Hz.}
      Timer50Hz: {2, description: Counter sent at 10Hz.}
      Timer50Hz: {3, description: Counter sent at 200Hz.}
      Timer50Hz: {4, description: Counter sent at 500Hz.}
      Timer50Hz: {5, description: Counter sent at 1000Hz.}
